<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q4="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q1="clr-namespace:Bonsai.Video;assembly=Bonsai.Video" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoCaptureDevice">
          <q1:Index>0</q1:Index>
          <q1:Format>
            <q1:FrameSize>
              <q1:Width>1280</q1:Width>
              <q1:Height>960</q1:Height>
            </q1:FrameSize>
            <q1:AverageFrameRate>60</q1:AverageFrameRate>
            <q1:MaximumFrameRate>60</q1:MaximumFrameRate>
            <q1:BitCount>24</q1:BitCount>
          </q1:Format>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:ImageWriter">
          <q2:Path>\\.\pipe\video</q2:Path>
          <q2:Suffix>None</q2:Suffix>
          <q2:Overwrite>false</q2:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Delay">
          <DueTime>PT0.5S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>-f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\BV_EyeTracking\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi</Format>
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Arguments" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:StartProcess">
          <q3:FileName>ffmpeg</q3:FileName>
          <q3:Arguments>-f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\BV_EyeTracking\EyeTracking_.avi</q3:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\Data\BV_EyeTracking\EyeTrackingData_.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>true</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="q4:PythonTransform">
        <q4:Name>Pupil tracking</q4:Name>
        <q4:Script>import clr
import math
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

color = Scalar.Rgb(255,255,255)
color1 = Scalar.Rgb(150,150,150)
thickness = 3


@returns(IplImage)
def process(value):
  
 
  center = value.Item1.Centroid
  axis1 = value.Item1.MajorAxisLength/2
  axis2 = value.Item1.MinorAxisLength/2
  angle = value.Item1.Orientation*180/math.pi
  image = value.Item2
  

  output = image.Clone()
  CV.Ellipse(output, Point(center), Size(axis1, axis2), angle, 0, 360, color, 1)
  

  return output</q4:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartSession</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopSession</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RecieveAndProcessUDP</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q5:ReceiveMessage">
              <q5:Connection>r</q5:Connection>
              <q5:Address>/</q5:Address>
              <q5:TypeTag>s</q5:TypeTag>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%s %s</Pattern>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StartSession</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>StopSession</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>StartTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>START</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Equal" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="2" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source2" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="1" Label="Source1" />
                  <Edge From="5" To="0" Label="Source1" />
                  <Edge From="6" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>StopTrigger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>STOP</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Equal" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="2" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source2" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="1" Label="Source1" />
                  <Edge From="5" To="0" Label="Source1" />
                  <Edge From="6" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="7" To="4" Label="Source1" />
            <Edge From="8" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Core</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:Crop">
                <q2:RegionOfInterest>
                  <q2:X>907</q2:X>
                  <q2:Y>168</q2:Y>
                  <q2:Width>68</q2:Width>
                  <q2:Height>80</q2:Height>
                </q2:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:Threshold">
                <q2:ThresholdValue>39</q2:ThresholdValue>
                <q2:MaxValue>255</q2:MaxValue>
                <q2:ThresholdType>BinaryInv</q2:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:MorphologicalOperator">
                <q2:Size>
                  <q2:Width>3</q2:Width>
                  <q2:Height>3</q2:Height>
                </q2:Size>
                <q2:Anchor>
                  <q2:X>1</q2:X>
                  <q2:Y>1</q2:Y>
                </q2:Anchor>
                <q2:Shape>Ellipse</q2:Shape>
                <q2:Iterations>2</q2:Iterations>
                <q2:Operation>Close</q2:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:FindContours">
                <q2:Mode>External</q2:Mode>
                <q2:Method>ChainApproxNone</q2:Method>
                <q2:Offset>
                  <q2:X>0</q2:X>
                  <q2:Y>0</q2:Y>
                </q2:Offset>
                <q2:MinArea xsi:nil="true" />
                <q2:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Take">
                <Count>1</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="DoubleProperty">
                <Value>49734825.2928</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="RegionOfInterest" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThresholdValue" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="12" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="13" To="0" Label="Source1" />
            <Edge From="14" To="0" Label="Source2" />
            <Edge From="15" To="1" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="14" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="12" To="2" Label="Source2" />
      <Edge From="12" To="4" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="13" To="11" Label="Source2" />
      <Edge From="14" To="3" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="16" To="9" Label="Source1" />
      <Edge From="16" To="10" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Video.VideoCaptureDevice, Bonsai.Video, Version=2.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ImageWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Delay, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FormatBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.StartProcess, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Scripting.PythonTransform, Bonsai.Scripting, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ParseBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.DoubleProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>